CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:Slide(?P<Site>[0-9][0-9])_
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "Slide")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (and (file does contain "Bacteria"))
    Name to assign these images:FluorescenceImage
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['']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
    Select the input image:FluorescenceImage
    Name the primary objects to be identified:Droplets
    Typical diameter of objects, in pixel units (Min,Max):150,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.5
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:0.5
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
MaskImage:[module_num:6|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
    Select the input image:FluorescenceImage
    Name the output image:Masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Droplets
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    Invert the mask?:No

Crop:[module_num:7|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
    Select the input image:FluorescenceImage
    Name the output image:Cropped
    Select the cropping shape:Image
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    Remove empty rows and columns?:All
    Select the masking image:Masked
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Cropped
    Name the primary objects to be identified:Bacteria
    Typical diameter of objects, in pixel units (Min,Max):80,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.76
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Cropped
    Name the output image:Outline_Droplets
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:white
    Select objects to display:Droplets

OverlayObjects:[module_num:10|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
    Input:Outline_Droplets
    Name the output image:Counted_Droplets
    Objects:Bacteria
    Opacity:0.3

DisplayDataOnImage:[module_num:11|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
    Display object or image measurements?:Object
    Select the input objects:Droplets
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Counted_Droplets
    Text color:red
    Name the output image that has the measurements displayed:FluorescenceImage_Result
    Font size (points):30
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:FluorescenceImage_Result
    Select method for constructing file names:From image filename
    Select image name for file prefix:FluorescenceImage
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:13|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
    Hidden:1
    Select an image to measure:FluorescenceImage
    Select objects to measure:Droplets
    Select objects to measure:Bacteria

MeasureObjectSizeShape:[module_num:14|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
    Select objects to measure:Droplets
    Select objects to measure:Bacteria
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|TileScan
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Droplets|Intensity_MassDisplacement_FluorescenceImage,Droplets|Intensity_MinIntensity_FluorescenceImage,Droplets|Intensity_IntegratedIntensityEdge_FluorescenceImage,Droplets|Intensity_StdIntensity_FluorescenceImage,Droplets|Intensity_UpperQuartileIntensity_FluorescenceImage,Droplets|Intensity_IntegratedIntensity_FluorescenceImage,Droplets|Intensity_MinIntensityEdge_FluorescenceImage,Droplets|Intensity_MADIntensity_FluorescenceImage,Droplets|Intensity_MeanIntensity_FluorescenceImage,Droplets|Intensity_MeanIntensityEdge_FluorescenceImage,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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