CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:Slide(?P<Site>[0-9][0-9])_
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "Slide")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (and (file does contain "Bacteria"))
    Name to assign these images:FluorescenceImage
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['']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
    Select the input image:FluorescenceImage
    Name the primary objects to be identified:Droplets
    Typical diameter of objects, in pixel units (Min,Max):150,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.023
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
MeasureObjectIntensity:[module_num:6|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notes:['']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
    Hidden:1
    Select an image to measure:FluorescenceImage
    Select objects to measure:Droplets

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|TileScan
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Droplets|Intensity_MassDisplacement_FluorescenceImage,Droplets|Intensity_MinIntensity_FluorescenceImage,Droplets|Intensity_StdIntensity_FluorescenceImage,Droplets|Intensity_IntegratedIntensityEdge_FluorescenceImage,Droplets|Intensity_UpperQuartileIntensity_FluorescenceImage,Droplets|Intensity_IntegratedIntensity_FluorescenceImage,Droplets|Intensity_MinIntensityEdge_FluorescenceImage,Droplets|Intensity_MADIntensity_FluorescenceImage,Droplets|Intensity_MeanIntensity_FluorescenceImage,Droplets|Intensity_MeanIntensityEdge_FluorescenceImage,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:8|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:FluorescenceDroplets
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    Output file location:Default Output Folder|TalTech\\Microfluidics - Documents\\Microscope pics\\2019
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:FluorescenceDroplets.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Select the well metadata:Site
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:FluorescenceDroplets
    Which objects should be used for locations?:Droplets
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:PosNegDroplets
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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